'"Add up event channels"

'As it says. Script to generate an event channel that holds spike times of two input event channels that you specify in the dialog.

'Dirk Bucher, December 2002.

if ViewKind() <> 0 then		'checks if the associated window is a time view...
   Message("This isn't a time view!");
  	halt							'...if not, script is stopped
endif

WindowVisible (3);		'sets the time view to the front

var ok%, cur1, cur2, wholefile%;	'sets variable expressions	

if Cursor (1) <> 0 and Cursor (2)/Cursor (1)<1 or Cursor (1)=-1 or Cursor (2)=-1 then ' if Cursor (1) and Cursor (2) are not present or not in the right
																						'order....
	DlgCreate ("ATTENTION!");			
	DlgText ("Cursor (1) and (2) not set correctly.",2,1);
	DlgLabel	(1, "Process whole file?",2,2);								'...choose if you want to analyse the whole file
	ok%:=DlgShow (wholefile%);

	if ok%=1 then																	'sets analysis to whole file or...
		cur1:= 0;														
		cur2:=MaxTime ();
	else
  		halt																		'stops the script
	endif

else
	cur1 := Cursor(1);															'if present and in the right order, get cursor times	
	cur2 := Cursor(2);
endif

var input1%, input2%, output%, name$, ok1%;

DlgCreate ("Add up event channels");												'creates the dialog to assign channels, analysis mode
DlgChan (1, "channel 1",10);												'(mark peaks, troughs, data rising or falling through a level).
DlgChan (2, "channel 2",10);
DlgChan (3, "New channel #",128);
DlgString (4, "New channel name",15);
	name$:="New events";							'presets

ok1%:=DlgShow (input1%, input2%, output%, name$);		'show the dialog

if ok1%=1 then				'if "OK" was clicked...

	var mem%;
	if chanKind (input1%)=5 and chanKind (input1%)=5 then
	mem%:=MemChan(5);
	else
	mem%:=MemChan(2);					'creates a new buffer channel (401), event type
	endif
	MemImport(mem%, input1%, cur1, cur2);	'imports the events to the buffer channel, as specified in the dialog
	MemImport(mem%, input2%, cur1, cur2);	'imports the events to the buffer channel, as specified in the dialog
	MemSave(mem%,output%, 0, 0);	'saves buffer channel to a real channel
	ChanDelete(mem%, 0);				'deletes the buffer channel
	ChanShow(output%);				'shows new channel
	ChanTitle$(output%,name$);		'names new channel
	if chanKind (input1%)=2 or chanKind (input1%)=2 then
	DrawMode(output%,2);				'sets channel draw mode to "lines"
	else
	DrawMode(output%,1);				'sets channel draw mode to "lines"
	endif
endif
FrontView (App (3));			'brings script to the front...
FileClose (0);					'...and closes it


